<CompuCell3D Revision="2" Version="4.3.0">
   

<!-- Metadata -->
<Metadata>
    <NumberOfProcessors>1</NumberOfProcessors>
    <DebugOutputFrequency>10</DebugOutputFrequency>
</Metadata>

<!-- Potts -->
<Potts>
    <Dimensions x="400" y="150" z="1"/> 
    <Steps>100000</Steps>
    <Temperature>10.0</Temperature><!-- Standard in Compucell -->
    <NeighborOrder>1</NeighborOrder>
    <Boundary_x>Periodic</Boundary_x> 
    <Boundary_y>Periodic</Boundary_y>
    <FluctuationAmplitude>
        <FluctuationAmplitudeParameters CellType="Tumor" FluctuationAmplitude="15"/><!-- Set as the average -->
        <FluctuationAmplitudeParameters CellType="Nucleus" FluctuationAmplitude="0.5"/> <!-- The nucleus is rigid -->
        <FluctuationAmplitudeParameters CellType="Collagen" FluctuationAmplitude="0"/><!-- Irrelevant as the collagen is fixed -->
        <FluctuationAmplitudeParameters CellType="Factin" FluctuationAmplitude="25"/><!-- Keep high for flexibility -->
    </FluctuationAmplitude>
</Potts>

<!-- CellType -->
<Plugin Name="CellType">
    <CellType TypeId="0" TypeName="Medium"/>
    <CellType Freeze="" TypeId="1" TypeName="Collagen"/>
    <CellType TypeId="2" TypeName="Tumor"/>
    <CellType TypeId="3" TypeName="Nucleus"/>
    <CellType TypeId="4" TypeName="Factin"/>
</Plugin>   

<!-- Contact -->
<Plugin Name="Contact">
    <!-- We set the neutral contact energy as 10.0 -->
    <Energy Type1="Medium" Type2="Medium">10.0</Energy><!-- Neutral -->
    <Energy Type1="Medium" Type2="Tumor">10.0</Energy><!-- Set to 10 for the Binary F-actin model. Set to 20 for the Cell Wall model -->
    <Energy Type1="Medium" Type2="Nucleus">100.0</Energy><!-- Set high to create the cell wall effect -->
    <Energy Type1="Tumor" Type2="Tumor">10.0</Energy><!-- Neutral -->
    <Energy Type1="Tumor" Type2="Nucleus">10.0</Energy><!-- Neutral -->
    <Energy Type1="Nucleus" Type2="Nucleus">10.0</Energy><!-- Neutral -->
    <Energy Type1="Factin" Type2="Medium">10.0</Energy><!-- Neutral -->
    <Energy Type1="Factin" Type2="Tumor">2.0</Energy><!-- Set low to attach Factin to Tumor-->
    <Energy Type1="Factin" Type2="Nucleus">30.0</Energy><!-- Set high to create the cell wall effect, but lower than Medium-Nucleus -->
    <Energy Type1="Factin" Type2="Factin">10.0</Energy><!-- Neutral -->
    <Energy Type1="Collagen" Type2="Tumor">30.0</Energy><!-- To keep Factin between collagen and tumor -->
    <Energy Type1="Collagen" Type2="Nucleus">100.0</Energy><!-- Set high to create the cell wall effect -->
    <Energy Type1="Collagen" Type2="Factin">10.0</Energy> <!-- Neutral (this attraction is determined by the F-actin field) -->
    <Energy Type1="Collagen" Type2="Collagen">10.0</Energy><!-- Neutral -->
    <NeighborOrder>20</NeighborOrder>
    <WeightEnergyByDistance/><!-- Important to keep the cell round -->
</Plugin>

<!-- Add this plugin to see what happens when a surface term is added -->
<!-- <Plugin Name="Surface">
   <SurfaceEnergyParameters CellType="Collagen" LambdaSurface="0" TargetSurface="50"/>
   <SurfaceEnergyParameters CellType="Tumor" LambdaSurface="2.0" TargetSurface="200"/>
   <SurfaceEnergyParameters CellType="Nucleus" LambdaSurface="2.0" TargetSurface="40"/>
   <SurfaceEnergyParameters CellType="Factin" LambdaSurface="2.0" TargetSurface="100"/>
</Plugin> -->


<!-- ExternalPotential -->
<Plugin Name="ExternalPotential">
    <Algorithm>PixelBased</Algorithm>
    <ExternalPotentialParameters CellType="Factin" x="70.0" y="0.0" z="0.0"/><!-- Adjustable. Set to 70 or 100 depending on the track and model-->
</Plugin>

<!-- Chemotaxis -->
<Plugin Name="Chemotaxis">
    <ChemicalField Name="FActin" Source="DiffusionSolverFE"><!-- The chemotaxis of the F-actin field-->
        <ChemotaxisByType Type="Factin" Lambda="-125" ChemotactTowards="Medium"/>
    </ChemicalField>
</Plugin> 

<!-- DiffusionSolverFE -->
<Steppable Type="DiffusionSolverFE">
    <DiffusionField Name="FActin">
        <DiffusionData>
            <FieldName>FActin</FieldName>
            <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant> <!-- If this is set smaller, the cell wants to attach to collagen too much -->
            <GlobalDecayConstant>0.1</GlobalDecayConstant><!-- If this is set larger, the cell doesn't stick to collagen enough -->
        </DiffusionData>
        <SecretionData>
            <SecretionOnContact Type="Factin" SecreteOnContactWith="Collagen">0.9</SecretionOnContact><!-- The field is only present at the boundary between collagen and F-actin -->
        </SecretionData>
    </DiffusionField>
</Steppable>

<!-- Trackers -->
<Plugin Name="NeighborTracker">
    <NeighborOrder>1</NeighborOrder>
</Plugin>

<Plugin Name="BoundaryPixelTracker">
    <NeighborOrder>1</NeighborOrder>
</Plugin>

<Plugin Name="PixelTracker">
    <NeighborOrder>1</NeighborOrder>
</Plugin>

<Plugin Name="Volume"/>

<Plugin Name="CenterOfMass"/>

<Plugin Name="SurfaceTracker"/>


</CompuCell3D>
